OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)
Comment
  New configuration for GRAZ presentation
  so that shows the bars continiuously -
Comment
  Calculation of the control value based on the
  new scaling algorithm
Comment
  LSL Export to the Video feedback stimulator -

Generic stream reader => #0
  Filename = ${Player_ScenarioDirectory}/bci-motor-imagery.ov
#0.Output stream 2 -> Signal Resampling => #1
  New Sampling Frequency = 128
  Sample Count Per Buffer = 8
  Low Pass Filter Signal Before Downsampling = true
Input stream 2=#1, Input stream 3=#0.Output stream 3 -> Identity => #2
#2.Output stream 2 -> Reference Channel
  Channel = Nz
  Channel Matching Method = Smart
-> Channel Selector
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter "Surface Laplacian"
  Spatial Filter Coefficients = 4;0;-1;0;-1;-1;0;0;-1;0;0;4;0;-1;0;0;-1;-1;0;-1
  Number of Output Channels = 2
  Number of Input Channels = 10
  Filter matrix file =
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #11
Features=#11 -> Classifier processor => #12
  Filename to load configuration from = ${Player_ScenarioDirectory}/classifier_cfg_custom_stimuly.cfg
#12.Hyperplane distance -> Calculate Control Value (GRAZ) => #13
  Clock frequency (Hz) = 1
  Script = ${Player_ScenarioDirectory}/graz.py
Input signal=#13.Oputput -> Export to Video Feedback
  Stream name = OpenViBE
  Stream type = OpenVibe
#13.Oputput -> Matrix Display "Display Control Value"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#13.Sampl_per_sec -> Matrix Display "Display Number of Samples per second"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Self-placed => #17
  Lua Script = ${Player_ScenarioDirectory}/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Right
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 0
  Wait For Beep Duration (in sec) = 0.000000
  Wait For Cue Duration (in sec) = 0.000000
  Display Cue Duration (in sec) = 0
  Feedback Duration (in sec) = 600
  End of Trial Minimum Duration (in sec) = 0
  End of Trial Maximum Duration (in sec) = 0
Stimulations=#17, Amplitude=#12.Hyperplane distance -> Self-placed Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
