OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Comment
  <- Select the output file

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Rename "FC3;FC4;C5;C3;C1;C4;C6;CP3;C2;CP4;O1;O2;CH13;CH14;CH15;EMG"
  New channel names = FC3;FC4;C5;C3;C1;C4;C6;CP3;C2;CP4;O1;O2;CH13;CH14;CH15;EMG
-> Channel Selector "EMG;FC3;FC4;C5;C3;C1;C4;C6;CP3;C2;CP4;O1;O2" => #2
  Channel List = EMG;FC3;FC4;C5;C3;C1;C4;C6;CP3;C2;CP4;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #3
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
Data=#3, Stimulations=#0.Stimulations -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Graz Motor Imagery BCI Stimulator => #5
  Lua Script = ${Player_ScenarioDirectory}/scripts/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 25
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 5
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 3.000000
  Display Cue Duration (in sec) = 5
  Feedback Duration (in sec) = 0
  End of Trial Minimum Duration (in sec) = 4
  End of Trial Maximum Duration (in sec) = 6
-> Player Controller
  Stimulation name = OVTK_GDF_End_Of_Session
  Action to perform = Stop
#5 -> Stimulation listener
  Log level to use = Information
Stimulations=#5 -> 0x341d3912 Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
#5 -> Display cue image
  Display images in full screen = false
  Scale images to fit = false
  Clear screen Stimulation = OVTK_GDF_End_Of_Trial
  Cue Image 1 = ${Player_ScenarioDirectory}/img/cross.png
  Stimulation 1 = OVTK_GDF_Cross_On_Screen
  Cue Image 2 = ${Player_ScenarioDirectory}/img/handR.png
  Stimulation 2 = OVTK_GDF_Right
  Cue Image 3 = ${Player_ScenarioDirectory}/img/Rest.png
  Stimulation 3 = OVTK_GDF_Left
#5 -> Sound Player "Beep Begin"
  PLAY trigger = OVTK_GDF_Cross_On_Screen
  STOP trigger = OVTK_StimulationId_Label_01
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = false
#5 -> Sound Player "Beep End"
  PLAY trigger = OVTK_GDF_End_Of_Trial
  STOP trigger = OVTK_StimulationId_Label_01
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = false
Experiment information=#0.Experiment information, Signal=#2, Stimulation=#5 -> GDF file writer
  Filename = ${Experiment_Path}/${SubjectID}/${Session}/training_data.gdf
