OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)

GDF file reader => #0
  Filename = ${Experiment_Path}/${SubjectID}/${Session}/training_data.gdf
  Samples per buffer = 32
  Subtract physical minimum = false
#0.EEG stream -> Channel Selector "C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4;O1;O2"
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #2
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = ${low_freq}
  High Cut-off Frequency (Hz) = ${high_freq}
  Band Pass Ripple (dB) = 0.5
Input stream 1=#2, Input stream 2=#0.Stimulations -> Identity => #3
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Left trials" => #4
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
Input signal=#3.Output stream 1, Input stimulations=#3.Output stream 2 -> Stimulation based epoching "Right trials" => #5
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
Stimulations=#3.Output stream 2, Signal condition 1=#4, Signal condition 2=#5 -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_EndOfFile
  Spatial filter configuration = ${Experiment_Path}/${SubjectID}/${Session}/${filename}
  Filter dimension = 2
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
