OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)

GDF file reader => #0
  Filename = ${Experiment_Path}/${SubjectID}/${Session}/training_data.gdf
  Samples per buffer = 32
  Subtract physical minimum = false
#0.EEG stream -> Channel Selector "C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4;O1;O2" => #1
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4;O1;O2
  Action = Select
  Channel Matching Method = Smart
Input stream 1=#1, Input stream 2=#0.Stimulations -> Identity => #2
#2.Output stream 1 -> Temporal filter "14-18"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 14.000000
  High cut frequency (Hz) = 18.000000
  Pass band ripple (dB) = 0.500000
-> Spatial Filter => #4
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/14-18-csp-filter.cfg
Input stream 1=#4, Input stream 2=#2.Output stream 2 -> Identity => #5
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching "Sim Eph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #11
Input signal=#5.Output stream 1, Input stimulations=#5.Output stream 2 -> Stimulation based epoching "SimEph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #17
#2.Output stream 1 -> Temporal filter "16-20"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 16.000000
  High cut frequency (Hz) = 20.000000
  Pass band ripple (dB) = 0.500000
-> Spatial Filter => #19
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/16-20-csp-filter.cfg
Input stream 1=#19, Input stream 2=#2.Output stream 2 -> Identity => #20
Input signal=#20.Output stream 1, Input stimulations=#20.Output stream 2 -> Stimulation based epoching "Sim Eph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #26
Input signal=#20.Output stream 1, Input stimulations=#20.Output stream 2 -> Stimulation based epoching "SimEph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #32
#2.Output stream 1 -> Temporal filter "18-22"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 18.000000
  High cut frequency (Hz) = 22.000000
  Pass band ripple (dB) = 0.500000
-> Spatial Filter => #34
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/18-22-csp-filter.cfg
Input stream 1=#34, Input stream 2=#2.Output stream 2 -> Identity => #35
Input signal=#35.Output stream 1, Input stimulations=#35.Output stream 2 -> Stimulation based epoching "Sim Eph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #41
Input signal=#35.Output stream 1, Input stimulations=#35.Output stream 2 -> Stimulation based epoching "SimEph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #47
#2.Output stream 1 -> Temporal filter "20-24"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 20.000000
  High cut frequency (Hz) = 27.000000
  Pass band ripple (dB) = 0.500000
-> Spatial Filter => #49
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/20-24-csp-filter.cfg
Input stream 1=#49, Input stream 2=#2.Output stream 2 -> Identity => #50
Input signal=#50.Output stream 1, Input stimulations=#50.Output stream 2 -> Stimulation based epoching "Sim Eph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #56
Input signal=#50.Output stream 1, Input stimulations=#50.Output stream 2 -> Stimulation based epoching "SimEph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #62
#2.Output stream 1 -> Temporal filter "22-26"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 22.000000
  High cut frequency (Hz) = 26.000000
  Pass band ripple (dB) = 0.500000
-> Spatial Filter => #64
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/22-26-csp-filter.cfg
Input stream 1=#64, Input stream 2=#2.Output stream 2 -> Identity => #65
Input signal=#65.Output stream 1, Input stimulations=#65.Output stream 2 -> Stimulation based epoching "Sim Eph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #71
Input signal=#65.Output stream 1, Input stimulations=#65.Output stream 2 -> Stimulation based epoching "SimEph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #77
#2.Output stream 1 -> Temporal filter "24-28"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 24.000000
  High cut frequency (Hz) = 28.000000
  Pass band ripple (dB) = 0.500000
-> Spatial Filter => #79
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/24-28-csp-filter.cfg
Input stream 1=#79, Input stream 2=#2.Output stream 2 -> Identity => #80
Input signal=#80.Output stream 1, Input stimulations=#80.Output stream 2 -> Stimulation based epoching "Sim Eph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #86
Input signal=#80.Output stream 1, Input stimulations=#80.Output stream 2 -> Stimulation based epoching "SimEph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #92
#2.Output stream 1 -> Temporal filter "26-30"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 26.000000
  High cut frequency (Hz) = 30.000000
  Pass band ripple (dB) = 0.500000
-> Spatial Filter => #94
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/26-30-csp-filter.cfg
Input stream 1=#94, Input stream 2=#2.Output stream 2 -> Identity => #95
Input signal=#95.Output stream 1, Input stimulations=#95.Output stream 2 -> Stimulation based epoching "Sim Eph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #101
Input signal=#95.Output stream 1, Input stimulations=#95.Output stream 2 -> Stimulation based epoching "SimEph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #107
Input stream 1=#1, Input stream 2=#0.Stimulations -> Identity => #108
#108.Output stream 1 -> Temporal filter "8-24"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Spatial Filter => #110
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/8-24-csp-filter.cfg
Input stream 1=#110, Input stream 2=#108.Output stream 2 -> Identity => #111
Input signal=#111.Output stream 1, Input stimulations=#111.Output stream 2 -> Stimulation based epoching "Sim Eph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #117
Input signal=#111.Output stream 1, Input stimulations=#111.Output stream 2 -> Stimulation based epoching "SimEph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #123
#108.Output stream 1 -> Temporal filter "12-24"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
-> Spatial Filter => #125
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/12-24-csp-filter.cfg
Input stream 1=#125, Input stream 2=#108.Output stream 2 -> Identity => #126
Input signal=#126.Output stream 1, Input stimulations=#126.Output stream 2 -> Stimulation based epoching "Sim Eph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #132
Input signal=#126.Output stream 1, Input stimulations=#126.Output stream 2 -> Stimulation based epoching "SimEph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #138
#108.Output stream 1 -> Temporal filter "6-10"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 6.000000
  High cut frequency (Hz) = 10.000000
  Pass band ripple (dB) = 0.500000
-> Spatial Filter => #140
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/6-10-csp-filter.cfg
Input stream 1=#140, Input stream 2=#108.Output stream 2 -> Identity => #141
Input signal=#141.Output stream 1, Input stimulations=#141.Output stream 2 -> Stimulation based epoching "Sim Eph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #147
Input signal=#141.Output stream 1, Input stimulations=#141.Output stream 2 -> Stimulation based epoching "SimEph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #153
#108.Output stream 1 -> Temporal filter "8-12"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 12.000000
  Pass band ripple (dB) = 0.500000
-> Spatial Filter => #155
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/8-12-csp-filter.cfg
Input stream 1=#155, Input stream 2=#108.Output stream 2 -> Identity => #156
Input signal=#156.Output stream 1, Input stimulations=#156.Output stream 2 -> Stimulation based epoching "Sim Eph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #162
Input signal=#156.Output stream 1, Input stimulations=#156.Output stream 2 -> Stimulation based epoching "SimEph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #168
#108.Output stream 1 -> Temporal filter "10-14"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 10.000000
  High cut frequency (Hz) = 14.000000
  Pass band ripple (dB) = 0.500000
-> Spatial Filter => #170
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/10-14-csp-filter.cfg
Input stream 1=#170, Input stream 2=#108.Output stream 2 -> Identity => #171
Input signal=#171.Output stream 1, Input stimulations=#171.Output stream 2 -> Stimulation based epoching "Sim Eph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #177
Input signal=#171.Output stream 1, Input stimulations=#171.Output stream 2 -> Stimulation based epoching "SimEph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #183
#108.Output stream 1 -> Temporal filter "12-16"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12.000000
  High cut frequency (Hz) = 16.000000
  Pass band ripple (dB) = 0.500000
-> Spatial Filter => #185
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/12-16-csp-filter.cfg
Input stream 1=#185, Input stream 2=#108.Output stream 2 -> Identity => #186
Input signal=#186.Output stream 1, Input stimulations=#186.Output stream 2 -> Stimulation based epoching "Sim Eph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #192
Input signal=#186.Output stream 1, Input stimulations=#186.Output stream 2 -> Stimulation based epoching "SimEph"
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #198
Classifier=#117, class b=#123, New input[2]=#132, New input[3]=#138, New input[4]=#147, New input[5]=#153, New input[6]=#162, New input[7]=#168, New input[8]=#177, New input[9]=#183, New input[10]=#192, New input[11]=#198, New input[12]=#11, New input[13]=#17, New input[14]=#26, New input[15]=#32, New input[16]=#41, New input[17]=#47, New input[18]=#56, New input[19]=#62, New input[20]=#71, New input[21]=#77, New input[22]=#86, New input[23]=#92, New input[24]=#101, New input[25]=#107, New input[26]=#5.Output stream 2 -> Custom LDA => #199
  Clock frequency (Hz) = 1
  Script = ${Player_ScenarioDirectory}/scripts/custom_LDA.py
  tmp_filter_config_file = ${Experiment_Path}/${SubjectID}/${Session}/tmp_filter_config.csv
  x = x
-> Stimulation listener
  Log level to use = Information
#199 -> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
