OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA
Settings
  foo = false

GDF file reader => #0
  Filename = ${Experiment_Path}/${SubjectID}/${Session}/training_data.gdf
  Samples per buffer = 32
  Subtract physical minimum = false
#0.EEG stream -> Channel Selector "C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4;O1;O2" => #1
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Filter 1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/tmpFilter1.xml
-> Spatial Filter "CSP Filter 1" => #3
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/cspFilter1.cfg
#1 -> Temporal filter "Filter 2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/tmpFilter2.xml
-> Spatial Filter "CSP Filter 2" => #5
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/cspFilter2.cfg
#1 -> Temporal filter "Filter 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/tmpFilter3.xml
-> Spatial Filter "CSP Filter 3" => #7
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/cspFilter3.cfg
#1 -> Temporal filter "Filter 4"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/tmpFilter4.xml
-> Spatial Filter "CSP Filter 4" => #9
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/cspFilter4.cfg
Input 1=#3, Input 2=#5, Input 3=#7, Input 4=#9 -> Signal Merger => #10
#0.Stimulations -> Stimulation Filter
  Default action = Reject
  Time range begin = 0
  Time range end = 100
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Left
  Stimulation range end = OVTK_GDF_Right
-> Stimulation listener
  Log level to use = Information
Input stream 1=#0.EEG stream, Input stream 2=#0.Stimulations -> Identity => #13
Signal=#10, Stimulation=#13.Output stream 2 -> GDF file writer
  Filename = ${Experiment_Path}/${SubjectID}/${Session}/training_csp_out-[$core{date}-$core{time}].gdff
Input stream 1=#10, Input stream 2=#13.Output stream 2 -> Identity => #15
Data=#10, Stimulations=#15.Output stream 2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#15.Output stream 1, Input stimulations=#15.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #22
Input signal=#15.Output stream 1, Input stimulations=#15.Output stream 2 -> Stimulation based epoching
  Epoch duration (in sec) = 4.000000
  Epoch offset (in sec) = 0.500000
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #28
Stimulations=#15.Output stream 2, Features for class 1=#22, Features for class 2=#28 -> Classifier trainer
  Train trigger = OVTK_StimulationId_EndOfFile
  Filename to save configuration to = ${Experiment_Path}/${SubjectID}/${Session}/motor-imagery-bci-config-classifier.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = true
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 7
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Pause
