OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)
Comment
  --:: Remember to change the file
                  to the one you recorded before!
Comment
  New configuration for GRAZ presentation
                  so that shows the bars continiuously -
Comment
  Calculation of the control value based on the
                  new scaling algorithm
Comment
  LSL Export to the Video feedback stimulator -

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Rename "FC3;FC4;C5;C3;C1;C4;C6;CP3;C2;CP4;O1;O2;CH13;CH14;CH15;EMG"
  New channel names = FC3;FC4;C5;C3;C1;C4;C6;CP3;C2;CP4;O1;O2;CH13;CH14;CH15;EMG
-> Channel Selector "C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4;O1;O2" => #2
  Channel List = C3;C4;FC3;FC4;C5;C1;C2;C6;CP3;CP4;O1;O2
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Filter 1"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/tmpFilter1.xml
-> Spatial Filter "CSP Filter 1" => #4
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/cspFilter1.cfg
#2 -> Temporal filter "Filter 2"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/tmpFilter2.xml
-> Spatial Filter "CSP Filter 2" => #6
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/cspFilter2.cfg
#2 -> Temporal filter "Filter 3"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/tmpFilter3.xml
-> Spatial Filter "CSP Filter 3" => #8
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/cspFilter3.cfg
#2 -> Temporal filter "Filter 4"
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 24.000000
  Pass band ripple (dB) = 0.500000
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/tmpFilter4.xml
-> Spatial Filter "CSP Filter 4" => #10
  Spatial Filter Coefficients = 1;0;0;0;0;1;0;0;0;0;1;0;0;0;0;1
  Number of Output Channels = 4
  Number of Input Channels = 4
  Filter matrix file =
  0x8d21ff41 = ${Experiment_Path}/${SubjectID}/${Session}/cspFilter4.cfg
Input 1=#4, Input 2=#6, Input 3=#8, Input 4=#10 -> Signal Merger
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #16
Features=#16 -> Classifier processor => #17
  Filename to load configuration from = ${Experiment_Path}/${SubjectID}/${Session}/motor-imagery-bci-config-classifier.cfg
#17.Hyperplane distance -> Simple DSP => #18
  Equation = x
#2 -> Temporal filter "8-24Hz" => #19
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 24
  Pass band ripple (dB) = 0.5
-> Simple DSP "x²"
  Equation = x*x
-> Signal average
-> Epoch average
  Averaging type = Moving epoch average (Immediate)
  Epoch count = 32
-> 2D Topography
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Gain = 0.02
  Caption =
  Color = ${AdvancedViz_DefaultColorGradient}
#19 -> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 1
-> Spectral analysis => #25
  Amplitude = true
  Phase = false
  Real Part = false
  Imaginary Part = false
#25.Amplitude -> Power spectrum display
  Channel Localisation = ${AdvancedViz_ChannelLocalisation}
  Positive Data Only ? = true
  Gain = 0.001
  Caption =
  Translucency = 10.000000
  Color = ${AdvancedViz_DefaultColorGradient}
#0.Stimulations -> 0x341d3912 Stimulation listener
  Log level to use = Information
Experiment information=#0.Experiment information, Signal=#0.Signal stream -> GDF file writer
  Filename = ${Experiment_Path}/${SubjectID}/${Session}/online-[$core{date}-$core{time}].gdf
Graz Motor Imagery BCI Stimulator => #29
  Lua Script = ${Player_ScenarioDirectory}/scripts/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Stimulations=#29, Amplitude=#18 -> Standard GRAZ
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = true
  Predictions to integrate = 30
  Positive feedback only = false
Input=#18, stim=#29 -> Calculate Control Value (GRAZ) => #31
  Clock frequency (Hz) = 1
  Script = ${Player_ScenarioDirectory}/scripts/graz.py
Input signal=#31.Oputput -> Export to Video Feedback
  Stream name = OpenViBE
  Stream type = OpenVibe
#31.Oputput -> Matrix Display "Display Control Value"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#31.Sampl_per_sec -> Matrix Display "Display Number of Samples per second"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Self-placed => #35
  Lua Script = ${Player_ScenarioDirectory}/scripts/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Right
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 0
  Wait For Beep Duration (in sec) = 0.000000
  Wait For Cue Duration (in sec) = 0.000000
  Display Cue Duration (in sec) = 0
  Feedback Duration (in sec) = 600
  End of Trial Minimum Duration (in sec) = 0
  End of Trial Maximum Duration (in sec) = 0
Stimulations=#35, Amplitude=#18 -> Self-placed Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
