OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.0.1)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Data Acquisition
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

Generic stream reader a => #0
  Filename = ${Designer_DefaultWorkingDirectory}/signals/bci-motor-imagery.ov
Graz Motor Imagery BCI Stimulator => #1
  Lua Script = C:/Program
                            Files/openvibe-2.0/share/openvibe/scenarios/bci-examples/motor-imagery/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Experiment information=#0.Output stream 1, Signal=#0.Output stream 2, Stimulation=#1 -> GDF file writer
  Filename = ${Experiment_Path}/${SubjectID}/${Session}/training_data.gdf
Stimulations=#1 -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
#1 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
Data=#0.Output stream 2, Stimulations=#1 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
